PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1366, 768]
  color = $[0,0,0]
  colorSpace = hsv
  expName = strooptest
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent target
      color [set every repeat] = $colour
      colorSpace = hsv
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $word
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    KeyboardComponent response
      allowedKeys = 'left','right','down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.7
      storeCorrect = True
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  Routine instructions
    TextComponent instrText
      color = -0.1765, 0.4275, 0.8118
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Remember you choose the color of the letters, ignoring the word:

        red -> left
        blue -> right
        green -> down
        yellow -> up
    KeyboardComponent key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine welcome
    TextComponent text
      color = -0.1765, 0.4275, 0.8118
      letterHeight = 2
      startVal [time (s)] = 0.0
      units = cm
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      text:
        If you can play stroop
        you have to press the y
        else you press the n
    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if key_resp.keys== 'y':
            first_trial=1
            goodbye=0
        elif key_resp.keys== 'n':
            first_trial=0
            goodbye=1
  Routine goodbye
    TextComponent text_2
      color = 0.7569, 0.5373, 0.0000
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
      text = goodbye
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  Routine start
Flow
  Routine welcome
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = first_trial
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    Routine instructions
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = conditions.xlsx
      loopType = random
      nReps = 2
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      conditions:
        [{'colour': 'red', 'word': 'RED', 'congruent': 1, 'corrAns': 'left'},
        {'colour': 'green', 'word': 'RED', 'congruent': 0, 'corrAns': 'down'},
        {'colour': 'yellow', 'word': 'RED', 'congruent': 0, 'corrAns': 'up'},
        {'colour': 'blue', 'word': 'RED', 'congruent': 0, 'corrAns': 'right'},
        {'colour': 'green', 'word': 'BLUE', 'congruent': 0, 'corrAns': 'down'},
        {'colour': 'red', 'word': 'BLUE', 'congruent': 0, 'corrAns': 'left'},
        {'colour': 'blue', 'word': 'BLUE', 'congruent': 1, 'corrAns': 'right'},
        {'colour': 'yellow', 'word': 'BLUE', 'congruent': 0, 'corrAns': 'up'},
        {'colour': 'yellow', 'word': 'YELLOW', 'congruent': 1, 'corrAns': 'up'},
        {'colour': 'green', 'word': 'YELLOW', 'congruent': 0, 'corrAns': 'down'},
        {'colour': 'red', 'word': 'YELLOW', 'congruent': 0, 'corrAns': 'left'},
        {'colour': 'blue', 'word': 'YELLOW', 'congruent': 0, 'corrAns': 'right'},
        {'colour': 'yellow', 'word': 'GREEN', 'congruent': 0, 'corrAns': 'up'},
        {'colour': 'blue', 'word': 'GREEN', 'congruent': 0, 'corrAns': 'right'},
        {'colour': 'green', 'word': 'GREEN', 'congruent': 1, 'corrAns': 'down'},
        {'colour': 'red', 'word': 'GREEN', 'congruent': 0, 'corrAns': 'left'}]
      Routine trial
    LoopTerminator trials
  LoopTerminator trials_2
  LoopInitiator goodbye_fist loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = goodbye
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    Routine goodbye
  LoopTerminator goodbye_fist
